PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Gustatory_Condition
  keyboardBackend = ioHub
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Routines
  Routine Sit_Still
    TextboxComponent baseline
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Please relax and sit still for the next 30 seconds.
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  Routine Connecting
    TextComponent connecting_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      text = Connecting to EMG recorder
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  Routine Setup_Code
    CodeComponent code
      Code Type = Py
      Begin Routine:
        import json
        import os
        import time
        from psychopy.hardware import brainproducts


        # BEFORE RUNNING THIS, start up RCS manually on the recording computer.
        # And make sure that the BrainVision Recorder is open and running too.

        # If we're testing at home, we want to be able to run through the
        # experiments with just pretend EMG recording.
        # But if we're in the lab, we absolutely want to stop everything
        # if there's a problem with the EMG recording and figure out what's wrong.
        TESTING_AT_HOME = True

        # How many seconds to wait before deciding that the recording computer
        # can't be reached.
        TIMEOUT = 4

        # How many seconds to spend collecting a baseline EMG measurement.
        # During the actual experiment this will be 60 seconds.
        # While we're still testing things, it's convenient to have this
        # be shorter so we don't have to wait so long each time the experiment runs.
        BASELINE_DURATION = 30

        # How many seconds to start recording EMG after the final "spit now" beep.
        # This should include 8 seconds, plus some amount to time for them to
        # react to the beep and expel the tastant.
        SPIT_DURATION = 14

        # These are for tracking when recording starts
        # so that we can measure how long it actually happened
        RECORDING_STARTED = 0

        # All these settings tell Python where to find the RCS program
        # running on the recording computer.
        WORKSPACE = "C:/Vision/Workfiles/workspaces/Moral Disgust.rwksp"
        HOST = "129.64.55.213"
        PORT = 6700
        AMPLIFIER = "BrainAmp Family"

        # Read in the list of opponents for this subject.
        # This reads the text file where they are stored,
        # and reads them in as a Python list.
        with open(os.path.join("data", "opponents_C.txt"), "rt") as f:
            opponents = json.loads(f.read())

        # Create empty lists for both the opponents' names
        # and the filenames where their images are stored.
        opponent_names = []
        opponent_filenames = []

        # Go through the list of opponent information.
        for opponent in opponents:
            # Each item in the opponent list is a tuple with two parts:
            # the opponent's name and their image filename.
            # Break out the name and add it to the list of names.
            opponent_names.append(opponent[0])
            # Break out the filename and add it to the list of filenames.
            opponent_filenames.append(opponent[1])

        # Do the same procedure with emotion names and filenames.
        # First read in the entire list.
        with open(os.path.join("data", "emotions_C.txt"), "rt") as f:
            emotions = json.loads(f.read())

        # Create empty lists for the names and filenames.
        emotion_names = []
        emotion_filenames = []

        # Break out the names and filenames into their own lists.
        for emotion in emotions:
            emotion_names.append(emotion[0])
            emotion_filenames.append(emotion[1])

        # Read in the list of tastant phrases.
        with open(os.path.join("data", "tastant_phrases_C.txt"), "rt") as f:
            tastant_phrases = list(json.loads(f.read()))

        # Read in the list of tastant codes.
        with open(os.path.join("data", "tastant_codes_C.txt"), "rt") as f:
            tastant_codes = list(json.loads(f.read()))

        # Read in the list of bets (offers).
        with open(os.path.join("data", "bets_C.txt"), "rt") as f:
            bets = list(json.loads(f.read()))

        # Read in the list of bet (offer) phrases--the long way of saying them.
        with open(os.path.join("data", "bet_phrases_C.txt"), "rt") as f:
            bet_phrases = list(json.loads(f.read()))

        # Connect to the Brain Products Remote Control Server
        # API documentation at
        # https://www.psychopy.org/api/hardware/brainproducts.html

        # Try to connect to the computer running BrainProducts Recorder.
        try:
            RCS = brainproducts.RemoteControlServer(
                host=HOST,
                port=PORT,
                timeout=TIMEOUT,
            )

            # If connection is successful, print a little notification.
            print("INFO:")
            print("RCS connection SUCCESSFUL, EMG will be recorded.")
            print()

            # If you ever wanted to the Recorder remotely, you can do it with
            # these lines. We're not doing this, because we want to give the
            # experimenter a little more control.
            # RCS.openRecorder()
            # time.sleep(2)

        except Exception:
            # If we're at home and
            # if connection isn't successful, assume the experiment is going to run
            # in test mode with dummy commands and responses.
            if TESTING_AT_HOME:
                print("INFO:")
                print("RCS connection wasn't successful.")
                print("Running in MOCK recording mode.")
                print()
                RCS = None
            else:
                # If we're in the lab, make sure to loudly fail with
                # an error message so we can try to figure out what's wrong.
                raise Exception

        # If the connection is successful, get the EMG recording set up.
        if RCS is not None:
            # Provide the type of amplifier (with serial number when using LiveAmp).
            RCS.amplifier = AMPLIFIER

            # Turn overwrite protection on.
            RCS.overwriteProtection = True

            # Start monitoring (this will wait for a positive confirmation or timeout)
            # RCS automatically starts up in "default" mode, but we'll set it
            # here just to play it safe.
            RCS.mode = "default"
            # Just sit and wait for one second.
            # These seem to be necessary in order to give the recorder time
            # to process the commands.
            time.sleep(1)

            # Perform a DC reset.
            # This is only necessary if you're NOT going to do a high-pass filter
            # step on the data later.
            # We are going to high-pass filter, so we don't need to do this part
            # RCS.dcReset()
            # time.sleep(1)

            # Tell RCS where to set up the workspace.
            RCS.workspace = WORKSPACE
            # `expName` (the name of the experiment) and
            # `expInfo` (a variable with the experiment information)
            # will already be defined in the psychopy code.
            RCS.expName = expName  # NoQA: F821
            # Pull out the participant name from `expInfo`.
            RCS.participant = (f"{expInfo['participant']}")  # NoQA: F821
            time.sleep(1)

            # Switch the recorder over to monitoring mode.
            # This means it's ready to start recording.
            RCS.mode = "monitor"
            time.sleep(1)

            # Start up the recording, give it a couple seconds to
            # settle in, then pause it so that it's ready to go
            # for the rest of the experiment.
            RCS.startRecording()
            time.sleep(2)
            RCS.pauseRecording()
            time.sleep(1)


        def start_EMG_recording(annotation=None):
            # Keep track of when this snippet of EMG started recording.
            recording_start_time = time.time()
            # Set up the annotation.
            if annotation is None:
                # If the annotataion wasn't provided, note
                # the recording start time.
                annotation = f"recording started at {int(recording_start_time)}"
            annotation_type = "start"

            # If there is no recording going on, do mock recording,
            # showing some pretend messages in the psychopy run window.
            if RCS is None:
                print()
                print("MOCK:  Pretend EMG recording started")
                print(f"MOCK:  Annotated '{annotation}, {annotation_type}'")

            else:
                # Restart the recording and annotate it.
                RCS.resumeRecording()
                RCS.sendAnnotation(annotation, annotation_type)

            return recording_start_time


        def stop_EMG_recording(recording_stop_time):
            # Note when the snippet stopped recording and
            # calculate how long it has been recording.
            recording_stop_time = time.time()
            duration = recording_stop_time - RECORDING_STARTED

            # If there is no recording going on, do mock recording,
            # showing some pretend messages on the console.
            if RCS is None:
                print()
                print("MOCK:  Pretend EMG recording stopped")
                print(f"MOCK:  {duration} seconds of fake EMG recorded")

            else:
                # Pause the recording.
                RCS.pauseRecording()
  Routine Baseline_EMG
    CodeComponent get_baseline_EMG
      Code Type = Py
      End Routine:
        RECORDING_STARTED = start_EMG_recording("Getting baseline")
        time.sleep(BASELINE_DURATION)
        stop_EMG_recording(RECORDING_STARTED)
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = During this experiment you will be tasting different liquids. You will be told when to grab a cup, when to roll the liquid around your mouth, and when to spit the liquid into the cup. After this you will get to rinse your mouth with water. 
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  Routine Cup
    TextComponent grab_cup
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Participant please grab a cup.
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  Routine Tastant_Check
    TextComponent Tastant
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $tastant_phrases.pop(0)
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    KeyboardComponent password
      allowedKeys [set every repeat] = tastant_codes[0]
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        tastant_codes.pop(0)
  Routine taste_beeps
    SoundComponent taste_sound_1
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    SoundComponent taste_sound_2
      sound = 600
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = .3
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    SoundComponent taste_sound_3
      sound = 600
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = .3
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    TextComponent Roll_liquid_taste
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      text = Roll liquid gentely across your tongue
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  Routine Start_Spit_EMG
    CodeComponent get_spit_EMG
      Code Type = Py
      Before Experiment:
        RECORDING_STARTED = start_EMG_recording("Spitting")
  Routine spit_beep
    TextComponent spit_text
      letterHeight = 0.05
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 2.0
      text = Spit
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    SoundComponent spit_sound
      sound = 450
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent screen_clear
      letterHeight = 0.05
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = .5
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  Routine Stop_Spit_EMG
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Account for the time spent in the Spit_beep module
        time.sleep(SPIT_DURATION - 2.7)
        stop_EMG_recording(RECORDING_STARTED)
  Routine Rinse
    TextComponent Rinse_text
      letterHeight = 0.05
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 6.0
      text = When you hear the tone start rinsing. Please grab a cup. You will hear a second tone to tell you to stop and spit. 
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    SoundComponent Begin_Rinse
      sound = 300
      startVal [time (s)] = 12.2
      stopVal [duration (s)] = 1.0
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    SoundComponent Finish_rinse
      sound = 600
      startVal [time (s)] = 37.0
      stopVal [duration (s)] = 1.0
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    TextComponent Rinse_Spit
      letterHeight = 0.05
      startVal [time (s)] = 37.0
      stopVal [duration (s)] = 3.0
      text = Spit
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  Routine Rest
    TextboxComponent rest_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text = Relax for the next 60 seconds
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Flow
  Routine Connecting
  Routine Setup_Code
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    LoopInitiator Trail_1 loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine Sit_Still
      Routine Baseline_EMG
      Routine Instructions
      Routine Cup
      Routine Tastant_Check
      Routine taste_beeps
      Routine Start_Spit_EMG
      Routine spit_beep
      Routine Stop_Spit_EMG
      Routine Rinse
    LoopTerminator Trail_1
    Routine Rest
  LoopTerminator Blocks
