PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = $[-0.5, -0.5, -0.5]
  expName = Gustatory_Condition_v2
  keyboardBackend = ioHub
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Routines
  Routine Sit_Still
    TextboxComponent baseline
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Please relax and sit still for the next 20 seconds.
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    ParallelOutComponent p_port_2
      address = 0x3FF8
      register = EIO
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_3
      address = 0x3FF8
      register = EIO
      startData = 3
      startVal [time (s)] = 20.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Connecting
    TextComponent connecting_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      text = Connecting to EMG recorder
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  Routine Setup_Code
    CodeComponent initialization_script
      Code Type = Py
      Begin Routine:
        expInfo['session'] = "Gustatory"
  Routine Baseline_EMG
    CodeComponent get_baseline_EMG
      Code Type = Py
      End Routine:
        RECORDING_STARTED = start_EMG_recording("Getting baseline")
        time.sleep(BASELINE_DURATION)
        stop_EMG_recording(RECORDING_STARTED)
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100.0
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      text:
        During this experiment you will be tasting different liquids. You will be told when to grab a cup, when to roll the liquid around your mouth, and when to spit the liquid into the cup. After this you will get to rinse your mouth with water.

        Hit the spacebar when you're ready to start.
    KeyboardComponent spacebar_hit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_6
      address = 0x3FF8
      register = EIO
      startData = 4
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Cup
    TextComponent grab_cup
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
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      text:
        Participant please grab a cup.



        Experimenter hit "9" when ready.
    KeyboardComponent key_resp
      allowedKeys = 'num_9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_7
      address = 0x3FF8
      register = EIO
      startData = 20
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Tastant_Check
    TextComponent Tastant
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $tastant_phrases.pop(0)
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    KeyboardComponent password
      allowedKeys [set every repeat] = tastant_codes[0]
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        tastant_codes.pop(0)
  Routine taste_beeps
    SoundComponent taste_sound_1
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    SoundComponent taste_sound_2
      sound = 600
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = .3
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    SoundComponent taste_sound_3
      sound = 600
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = .3
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    TextComponent Roll_liquid_taste
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      text = Roll liquid gently across your tongue
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    ParallelOutComponent p_port_8
      address = 0x3FF8
      register = EIO
      startData = 21
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Start_Spit_EMG
    CodeComponent get_spit_EMG
      Code Type = Py
      Begin Routine:
        RECORDING_STARTED = start_EMG_recording("Spitting")
  Routine spit_beep
    TextComponent spit_text
      letterHeight = 0.05
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 2.0
      text = Spit
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    SoundComponent spit_sound
      sound = 450
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent screen_clear
      letterHeight = 0.05
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = .5
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    ParallelOutComponent p_port_9
      address = 0x3FF8
      register = EIO
      startData = 22
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_18
      address = 0x3FF8
      register = EIO
      startData = 32
      startVal [time (s)] = 12.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Stop_Spit_EMG
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Account for the time spent in the Spit_beep module
        time.sleep(SPIT_DURATION - 2.7)
        stop_EMG_recording(RECORDING_STARTED)
  Routine Rinse
    TextComponent Rinse_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = When you hear the tone start rinsing. Please grab a cup. You will hear a second tone to tell you to stop and spit. 
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    SoundComponent Begin_Rinse
      sound = 300
      startVal [time (s)] = 6.2
      stopVal [duration (s)] = 1.0
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    SoundComponent Finish_rinse
      sound = 600
      startVal [time (s)] = 36.2
      stopVal [duration (s)] = 1.0
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    TextComponent Rinse_Spit
      letterHeight = 0.05
      startVal [time (s)] = 36.2
      stopVal [duration (s)] = 3.0
      text = Spit
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    ParallelOutComponent p_port_10
      address = 0x3FF8
      register = EIO
      startData = 23
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_11
      address = 0x3FF8
      register = EIO
      startData = 24
      startVal [time (s)] = 6.2
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_12
      address = 0x3FF8
      register = EIO
      startData = 25
      startVal [time (s)] = 36.2
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Rest
    TextboxComponent rest_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = Relax for the next 30 seconds
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    ParallelOutComponent p_port_13
      address = 0x3FF8
      register = EIO
      startData = 27
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_14
      address = 0x3FF8
      register = EIO
      startData = 28
      startVal [time (s)] = 30.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Sync_Beeps
    SoundComponent sync_beep_1
      sound = 400
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    SoundComponent sync_beep_2
      sound = 400
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.25
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    SoundComponent sync_beep_3
      sound = 400
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    ParallelOutComponent p_port
      address = 0x3FF8
      register = EIO
      startData = 5
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Break
    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      text = Please take a 30 second break
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    ParallelOutComponent p_port_15
      address = 0x3FF8
      register = EIO
      startData = 29
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_16
      address = 0x3FF8
      register = EIO
      startData = 30
      startVal [time (s)] = 30.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Cross
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    ParallelOutComponent p_port_4
      address = 0x3FF8
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_5
      address = 0x3FF8
      register = EIO
      startData = 7
      startVal [time (s)] = 6.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Palatability
    SliderComponent Palatability_Score
      color = 0.8, 0.8, 0.8
      fillColor = 1.0, -1.0, 1.0
      forceEndRoutine = True
      granularity = 1
      labels = ("Worst thing I have ever tasted", "", "Not horrible but would not try again", "", "Pleasant tasting, would try again", "", "Best thing I have ever tasted")
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ParallelOutComponent p_port_17
      address = 0x3FF8
      register = EIO
      startData = 26
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please rate how good or bad liquid you received was.
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Flow
  Routine Setup_Code
  Routine Sync_Beeps
  LoopInitiator Blocks_of_Tastants loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Sit_Still
    LoopInitiator Each_Tastant_Once loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine Cross
      Routine Instructions
      Routine Cup
      Routine taste_beeps
      Routine spit_beep
      Routine Palatability
      Routine Rinse
      Routine Rest
    LoopTerminator Each_Tastant_Once
    Routine Break
  LoopTerminator Blocks_of_Tastants
