PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = $[-0.5, -0.5, -0.5]
  expName = MoralCondition_v2
  keyboardBackend = ioHub
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Routines
  Routine Game_Start
    TextComponent Game_Start_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the spacebar to start the game. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    ParallelOutComponent p_port_4
      address = 0x3FF8
      register = EIO
      startData = 4
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Fixation_Cross
    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    ParallelOutComponent p_port_5
      address = 0x3FF8
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_6
      address = 0x3FF8
      register = EIO
      startData = 7
      startVal [time (s)] = 6.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Opponent
    ImageComponent player_image_intro
      image [set every repeat] = $opponent_filenames[0]
      pos = (-.75, .5)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      units = norm
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    TextboxComponent player_name_intro
      bold = False
      editable = False
      letterHeight = 0.08
      pos = (.75, .5)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $opponent_names[0]
      units = norm
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    ParallelOutComponent p_port_7
      address = 0x3FF8
      register = EIO
      startData = 12
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_8
      address = 0x3FF8
      register = EIO
      startData = 13
      startVal [time (s)] = 6.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Offer
    ImageComponent player_image_offer
      image [set every repeat] = $opponent_filenames.pop(0)
      pos = (-.75, .5)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
      units = norm
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    TextboxComponent player_name_offer
      bold = False
      editable = False
      letterHeight = 0.08
      pos = (.75, .5)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
      text [set every repeat] = $opponent_names.pop(0)
      units = norm
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    TextComponent proposed_split
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.7
      text [set every repeat] = $bet_phrases.pop(0)
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    TextComponent accept_reject
      letterHeight = 0.05
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 6.0
      text = Do you accept or reject this offer?
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    ParallelOutComponent p_port_9
      address = 0x3FF8
      register = EIO
      startData = 14
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_10
      address = 0x3FF8
      register = EIO
      startData = 15
      startVal [time (s)] = 12.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_15
      address = 0x3FF8
      register = EIO
      startData = 31
      startVal [time (s)] = 6.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Arrows
    TextComponent arrow_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the "up" arrow to accept

        Press the "down" arrow to reject
    KeyboardComponent offer_choice
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_11
      address = 0x3FF8
      register = EIO
      startData = 16
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Non_Verbal_Instructions
    TextComponent Instructions_Affinity_Score
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = Please rate on the following scale how well each face captures your feelings about the offer you received. 
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    ParallelOutComponent p_port_12
      address = 0x3FF8
      register = EIO
      startData = 17
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Non_Verbal
    ImageComponent Emotion_Image
      image [set every repeat] = $emotion_filenames.pop(0)
      pos = (0, .25)
      size = (0.5, 0.4)
      startVal [time (s)] = 0.0
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    SliderComponent AffinityScore
      borderColor = 1.0000, 1.0000, 1.0000
      color = 0.8, 0.8, 0.8
      fillColor = 1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      granularity = 1
      labels = ("Very untrue of me", "Untrue of me", "Somewhat untrue of me", "Neurtral", "Somewhat true of me", "True of me", "Very true of me")
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ParallelOutComponent p_port_13
      address = 0x3FF8
      register = EIO
      startData = 18
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Verbal
    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please rate on the following scale how morally wrong you felt the offer you received was. 
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    SliderComponent Moral_Disgust_Score
      color = 0.8, 0.8, 0.8
      fillColor = 1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      granularity = 1
      labels = ("Extremely Immoral", "Immoral", "Somewhat Immoral", "Neutral", "Somewhat Moral", "Moral", "Extremely Moral")
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ParallelOutComponent p_port_14
      address = 0x3FF8
      register = EIO
      startData = 19
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Setup_Code
    CodeComponent code
      Code Type = Py
      Begin Routine:
        import json

        expInfo['session'] = "Moral"

        # Read in the list of opponents for this subject.
        # This reads the text file where they are stored,
        # and reads them in as a Python list.
        subject_id = expInfo['participant']
        with open(os.path.join("data", f"opponents_{subject_id}.txt"), "rt") as f:
            opponents = json.loads(f.read())

        # Create empty lists for both the opponents' names
        # and the filenames where their images are stored.
        opponent_names = []
        opponent_filenames = []

        # Go through the list of opponent information.
        for opponent in opponents:
            # Each item in the opponent list is a tuple with two parts:
            # the opponent's name and their image filename.
            # Break out the name and add it to the list of names.
            opponent_names.append(opponent[0])
            # Break out the filename and add it to the list of filenames.
            opponent_filenames.append(opponent[1])

        # Do the same procedure with emotion names and filenames.
        # First read in the entire list.
        with open(os.path.join("data", f"emotions_{subject_id}.txt"), "rt") as f:
            emotions = json.loads(f.read())

        # Create empty lists for the names and filenames.
        emotion_names = []
        emotion_filenames = []

        # Break out the names and filenames into their own lists.
        for emotion in emotions:
            emotion_names.append(emotion[0])
            emotion_filenames.append(emotion[1])

        # Read in the list of bets (offers).
        with open(os.path.join("data", f"bets_{subject_id}.txt"), "rt") as f:
            bets = list(json.loads(f.read()))

        # Read in the list of bet (offer) phrases--the long way of saying them.
        with open(os.path.join("data", f"bet_phrases_{subject_id}.txt"), "rt") as f:
            bet_phrases = list(json.loads(f.read()))
  Routine Sit_Still
    TextboxComponent baseline
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Please relax and sit still for the next 20 seconds.
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    ParallelOutComponent p_port_2
      address = 0x3FF8
      register = EIO
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_3
      address = 0x3FF8
      register = EIO
      startData = 3
      startVal [time (s)] = 20.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Sync_Beeps
    SoundComponent sync_beep_1
      sound = 400
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    SoundComponent sync_beep_2
      sound = 400
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.3
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    SoundComponent sync_beep_3
      sound = 400
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.3
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    SoundComponent sync_beep_4
      sound = 400
      startVal [time (s)] = 1.8
      stopVal [duration (s)] = 0.3
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    ParallelOutComponent p_port
      address = 0x3FF8
      register = EIO
      startData = 11
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Baseline_EMG
    CodeComponent get_baseline_EMG
      Code Type = Py
      End Routine:
        RECORDING_STARTED = start_EMG_recording("Getting baseline")
        time.sleep(BASELINE_DURATION)
        stop_EMG_recording(RECORDING_STARTED)
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = During this experiment you will be tasting different liquids. You will be told when to grab a cup, when to roll the liquid around your mouth, and when to spit the liquid into the cup. After this you will get to rinse your mouth with water. 
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  Routine Connecting
    TextComponent connecting_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = Connecting to EMG Recorder
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Flow
  Routine Setup_Code
  Routine Sync_Beeps
  Routine Sit_Still
  Routine Game_Start
  LoopInitiator loop loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine Fixation_Cross
    Routine Opponent
    Routine Offer
    Routine Arrows
    Routine Non_Verbal_Instructions
    LoopInitiator evaluate_all_emotions loopType="TrialHandler"
      loopType = sequential
      nReps = 7
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      Routine Non_Verbal
    LoopTerminator evaluate_all_emotions
    Routine Verbal
  LoopTerminator loop
