PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = $[-0.5, -0.5, -0.5]
  expName = Visual_Condition_v2
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine Connecting
    TextComponent connecting_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      text = Connecting to EMG recorder
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  Routine Setup_Code
    CodeComponent initialization_script
      Code Type = Py
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      Begin Routine:
        import json

        expInfo['session'] = "Visual"

        # Read in the list of opponents for this subject.
        # This reads the text file where they are stored,
        # and reads them in as a Python list.
        subject_id = expInfo['participant']
        with open(os.path.join("data", f"disgust_images_{subject_id}.txt"), "rt") as f:
            disgust_image_paths = json.loads(f.read())
  Routine Sit_Still
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Please relax and sit still for the next 20 seconds
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    ParallelOutComponent p_port_2
      address = 0x3FF8
      register = EIO
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_3
      address = 0x3FF8
      register = EIO
      startData = 3
      startVal [time (s)] = 20.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
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      text:
        In this portion of the experiment you will view a series of images and be asked to rate how disgusting you find each image using the scale under the image.

        Press space bar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_4
      address = 0x3FF8
      register = EIO
      startData = 4
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Fixation_Cross
    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent get_fix_cross_EMG_Properties
      Code Type = Py
      Begin Routine:
        RECORDING_STARTED = start_EMG_recording("Cross")
      End Routine:
        stop_EMG_recording(RECORDING_STARTED)
  Routine start_cross_EMG
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        RECORDING_STARTED = start_EMG_recording("Cross")
  Routine stop_cross_EMG
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        # Account for the time spent in the Spit_beep module
        # time.sleep(SPIT_DURATION - 2.7)
        stop_EMG_recording(RECORDING_STARTED)
  Routine Baseline_EMG
    CodeComponent get_baseline_EMG
      Code Type = Py
      End Routine:
        RECORDING_STARTED = start_EMG_recording("Getting baseline")
        time.sleep(BASELINE_DURATION)
        stop_EMG_recording(RECORDING_STARTED)
  Routine View_Cross
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    ParallelOutComponent p_port_6
      address = 0x3FF8
      register = EIO
      startData = 6
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_7
      address = 0x3FF8
      register = EIO
      startData = 7
      startVal [time (s)] = 6.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine View_Image
    ImageComponent disgust_image
      image [set every repeat] = $disgust_image_paths.pop(0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    ParallelOutComponent p_port_8
      address = 0x3FF8
      register = EIO
      startData = 8
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_9
      address = 0x3FF8
      register = EIO
      startData = 9
      startVal [time (s)] = 6.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Score_Image
    SliderComponent disgust_score
      borderColor = 1.0000, 1.0000, 1.0000
      color = 0.8, 0.8, 0.8
      fillColor = 1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      granularity = 1
      labels = "Not disgusting at all", "Slightly disgusting", "Moderately disgusting,\ncauses me to\nscrunch up my nose", "Very disgusting,\nI want to push\nthe image away", "Extremely disgusting,\nI feel nauseous"
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (0, 1, 2, 3, 4)
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    ParallelOutComponent p_port_10
      address = 0x3FF8
      register = EIO
      startData = 10
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Sync_Beeps
    SoundComponent sync_beep_1
      sound = 400
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    SoundComponent sync_beep_2
      sound = 400
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.4
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    ParallelOutComponent p_port
      address = 0x3FF8
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = .1
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine Connecting
  Routine Setup_Code
  Routine Sync_Beeps
  Routine Sit_Still
  Routine Instructions
  LoopInitiator loop loopType="TrialHandler"
    loopType = sequential
    nReps = 63
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    Routine View_Cross
    Routine View_Image
    Routine Score_Image
  LoopTerminator loop
