PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = parallel_port_test
  keyboardBackend = ioHub
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Routines
  Routine connect
    ParallelOutComponent p_port_test_1
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 2.0
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_test_2
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 7.0
      stopData = 0
      stopVal [duration (s)] = 2.0
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
      text = 5 second pause between recordings
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  Routine done
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = All done
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  Routine hello
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Hey Thistle
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Flow
  Routine hello
  Routine connect
  Routine done
